[[protocol]]
# Level  Start    Length   Period   Multiplier
0.0      0.0      250.1    0.0      0
0.0      250.1    50.0     0.0      0
0.0      300.1    270.0    0.0      0
0.0      570.1    149.6    0.0      0
0.0      719.7    336.3    0.0      0
0.0      1056.0   713.3    0.0      0
0.0      1769.3   302.7    0.0      0
0.0      2072.0   352.4    0.0      0
0.0      2424.4   385.2    0.0      0
0.0      2809.6   129.5    0.0      0
0.0      2939.1   500.6    0.0      0
0.0      3439.7   249.0    0.0      0
0.0      3688.7   362.0    0.0      0
0.0      4050.7   320.2    0.0      0
0.0      4370.9   670.9    0.0      0
0.0      5041.8   567.5    0.0      0
0.0      5609.3   516.0    0.0      0
0.0      6125.3   470.1    0.0      0
0.0      6595.4   729.2    0.0      0
0.0      7324.6   500.0    0.0      0
0.0      7824.6   999.9    0.0      0

